PsychoPy2experiment version="2022.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['audio/audio_error_ft-flanker.mp3', 'audio/audio_greatJob.mp3', 'img/left_arrow_red.png', 'img/right_arrow_red.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.5000, 0.5000, 0.5000
  expName = mini_mfe_online
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine JS_code
    CodeComponent JScode
      Code Type = JS
      Before JS Experiment:
        // for our own functions we need these specified in the global space
        // so these are defined in the "Before experiment" tab
        // linspace (this will be used in place of numpy.linspace for picking ISI)

        function linspace(a,b,n) {
            if(typeof n === "undefined") n = Math.max(Math.round(b-a)+1,1);
            if(n<2) { return n===1?[a]:[]; }
            var i,ret = Array(n);
            n--;
            for(i=n;i>=0;i--) { ret[i] = (i*b+(n-i)*a)/n; }
            return ret;
        }
      Begin JS Experiment:
        // shuffle is push in JS so defining shuffle for our JS experiment code
        shuffle = util.shuffle;
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.3
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      text:
        Arrow Game

        Welcome to the arrow game. In this game, arrows will be quickly flashed on the screen. Your goal is to respond to the direction of the MIDDLE arrow, and to respond as quickly as you can without making mistakes.

        If the MIDDLE arrow is pointing to the right, use your right hand to press the 'K' key on your keyboard. If the MIDDLE arrow is pointing to the left, use your left hand to press the 'S' key on your keyboard.

        Press the 'K' key to continue
    KeyboardComponent welcome_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finishMessage
    TextComponent finishMessage_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for your participation!
      wrapWidth = 1.3
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  Routine task_stimRoutine
    CodeComponent task_isi_code
      Code Type = Both
      Begin Experiment:
        #no need to initialize thisISI, as already done in practice code snippit
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(3500, 4000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        task_trial_loop.addData('ISI', thisISI)
    ImageComponent bigFace_2
      image [set every repeat] = $straightFace
      opacity = 0.85
      pos = (0, 0.0)
      size = (0.4267, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
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    ImageComponent cover_background
      image = img/cover_background.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    ImageComponent task_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent task_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      texture resolution = 512
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    ImageComponent task_rightImg2
      image [set every repeat] = $rightStim
      pos [set every repeat] = [0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent task_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .35
      texture resolution = 512
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    ImageComponent task_leftImg2
      image [set every repeat] = $leftStim
      pos [set every repeat] = [-0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent task_fixImg
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    KeyboardComponent task1_stim_keyResp
      allowedKeys = 's','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent task_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if task1_stim_keyResp.keys: #if at least one response was made this trial
            if task1_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif task1_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        task_trial_loop.addData('accuracy', accuracy)
  Routine prac_stimRoutine
    CodeComponent prac_isi_code
      Code Type = Both
      Begin Experiment:
        #initialize the thisISI variable
        thisISI = 0
      Begin JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      Begin Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(3500, 4000, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # save this ISI to our output file
        prac_trial_loop.addData('ISI', thisISI)


        # show in console for debugging
        #print('thisISI: ', thisISI)
    ImageComponent bigFace
      image [set every repeat] = $straightFace
      opacity = 0.85
      pos = (0, 0.0)
      size = (0.4267, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
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    ImageComponent cover_background_2
      image [set every repeat] = img/cover_background.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    ImageComponent prac_centerImg
      image [set every repeat] = $middleStim
      pos [set every repeat] = $locationC
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = .2
      texture resolution = 512
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    ImageComponent prac_rightImg1
      image [set every repeat] = $rightStim
      pos [set every repeat] = $locationR
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_rightImg2
      image [set every repeat] = $rightStim
      pos [set every repeat] = [0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_leftImg1
      image [set every repeat] = $leftStim
      pos [set every repeat] = $locationL
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_leftImg2
      image [set every repeat] = $leftStim
      pos [set every repeat] = [-0.077,0]
      saveStartStop = False
      size [set every repeat] = $imageSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .350
      texture resolution = 512
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    ImageComponent prac_fixImg
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.015)
      saveStartStop = False
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    KeyboardComponent prac_stim_keyResp
      allowedKeys = 's','k'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      store = all keys
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    CodeComponent prac_accuracy_code
      Code Type = Auto->JS
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      End Routine:
        trialNum = trialNum + 1 #iterate trial number for this block

        if prac_stim_keyResp.keys: #if at least one response was made this trial
            if prac_stim_keyResp.keys[0] == '1': #if the FIRST button pressed was a '1'
                if target == 'left': #if a left target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'right': #if a right target stim was shown this trial
                    accuracy = 0 #mark this trial as an error
            elif prac_stim_keyResp.keys[0] == '8': #if the FIRST button pressed was a '8'
                if target == 'right': #if a right target stim was shown this trial
                    accuracy = 1 #mark this trial as correct
                    numCorr = numCorr +1 #iterate number of correct responses for this block
                elif target == 'left': #if a left target stim was shown this trial
                    accuracy = 0 #mark this trial as an error

        # save this trial's accuracy to our output file
        prac_trial_loop.addData('accuracy', accuracy)
  Routine prac_blockReminders
    CodeComponent prac_initAcc_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        trialNum = 0
        accuracy = 0
        numCorr = 0
        blockAcc = 0
    TextComponent prac_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Practice
      wrapWidth = 1.3
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    TextComponent prac_reminder_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        You will now practice responding to the arrows. Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the 'K' and 'S' keys of your keyboard, then press the 'K' key when you are ready to begin.
    KeyboardComponent prac_reminder_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockReminders
    CodeComponent task_blockReminder_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialize the following variables at the start of experiment
        blockCounter = 0

        #note that we do not need to initialize the accuracy and numCorr vars here
        #because they were already initialilzed in the code snippet of the practice loop
      Begin Routine:
        blockCounter = blockCounter +1

        if blockCounter == 1:
            blockNumText = 'Block 1 of 12'
        elif blockCounter == 2:
            blockNumText = 'Block 2 of 12'
        elif blockCounter == 3:
            blockNumText = 'Block 3 of 12'
        elif blockCounter == 4:
            blockNumText = 'Block 4 of 12'
        elif blockCounter == 5:
            blockNumText = 'Block 5 of 12'
        elif blockCounter == 6:
            blockNumText = 'Block 6 of 12'
        elif blockCounter == 7:
            blockNumText = 'Block 7 of 12'
        elif blockCounter == 8:
            blockNumText = 'Block 8 of 12'
        elif blockCounter == 9:
            blockNumText = 'Block 9 of 12'
        elif blockCounter == 10:
            blockNumText = 'Block 10 of 12'
        elif blockCounter == 11:
            blockNumText = 'Block 11 of 12'
        elif blockCounter == 12:
            blockNumText = 'Block 12 of 12'
    TextComponent task_blockText
      letterHeight = 0.06
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockNumText
      wrapWidth = 1.3
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    TextComponent task_blockReminders_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Remember to always respond to the direction of the MIDDLE arrow.

        Respond as quickly as you can without making mistakes.

        To get ready, rest your right and left index fingers on the 'K' and 'S' keys of your keyboard, then press the 'K' key when you are ready to begin.
    KeyboardComponent task_blockReminders_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_blockFeed
    CodeComponent task_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockCounter < 10:
            if blockAcc >= .75:
                if blockAcc < .9:
                    blockFeed = 'Good job'
                    blockFeedCat = 1
                elif blockAcc >= .9:
                    blockFeed = 'Respond faster'
                    blockFeedCat = 2
            elif blockAcc < .75:
                blockFeed = 'Respond more accurately'
                blockFeedCat = 3
        elif blockCounter == 10:
            'You have completed all blocks'

        # save this block's feedback to our output file
        task_trial_loop.addData('blockFeedCat', blockFeedCat)

        #reset the following variables to zero before next block starts
        trialNum = 0
        numCorr = 0
    TextComponent task_blockFeed_text
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockFeed
      wrapWidth = 1.8
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    TextComponent task_blockFeed_text2
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 10
      text [set every repeat] = Press the 'K' key
      wrapWidth = 1.3
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    KeyboardComponent task_blockFeed_keyResp
      allowedKeys = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 10
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  Routine prac_blockFeed
    CodeComponent prac_blockFeed_code
      Code Type = Auto->JS
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      Begin Routine:
        blockAcc = numCorr / trialNum #compute accuracy for this block

        if blockAcc >= .75: #if accuracy >= 75% then say practice is complete and end practice loop to continue to main exp
            outPut = 'You have completed the practice' #feedback presented
            prac_block_loop.finished = True #end practice loop to continue to main exp
        elif blockAcc <= .75: #if accuracy < 75% then say that practice needs to be repeated and DO NOT end practice loop, instead, allow it to repeat
            outPut = 'Please try the practice again' #feedback presented
            prac_block_loop.finished = False #DO NOT end practice loop and allow to repeat

        #reset the following variables to zero before the next practice block starts
        trialNum = 0
        numCorr = 0
    TextComponent prac_blockFeed_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 1.3
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    TextComponent prac_pressContinue
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press the 'K' key
      wrapWidth = 1.3
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    KeyboardComponent prac_blockFeed_keyResp
      allowedKeys = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initFixation
    ImageComponent initFixation_img
      image [set every repeat] = img/transp_fixation.png
      pos = (0, -.015)
      size = (0.26, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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  Routine instructRight
    TextComponent instructRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the 'K' key on your keyboard with your right hand.

        Press the 'K' key to continue
    ImageComponent instructRight_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg1
      image = img/rightArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg1
      image = img/rightArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_rightImg2
      image = img/rightArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructRight_leftImg2
      image = img/rightArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructRight_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconRight
    TextComponent instructInconRight_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Sometimes the MIDDLE arrow will point in a different direction from the other arrows. However, your goal is to always respond based on the direction of the MIDDLE arrow.

        Below, the MIDDLE arrow is pointing to the right, so you would respond by pressing the 'K' key on your keyboard with your right hand.

        Press the 'K' key to continue
    ImageComponent instructIncon_centerImg
      image = img/rightArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg1
      image = img/leftArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg1
      image = img/leftArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_leftImg2
      image = img/leftArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructIncon_rightImg2
      image = img/leftArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent insructInconRight_keyResp
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructLeft
    TextComponent instructLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the 'S' key on your keyboard with your left hand.

        Press the 'S' key to continue
    ImageComponent instructLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg1
      image = img/leftArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg1
      image = img/leftArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_rightImg2
      image = img/leftArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructLeft_leftImg2
      image = img/leftArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructLeft_keyResp
      allowedKeys [set every repeat] = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructInconLeft
    TextComponent instructInconLeft_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Below, the MIDDLE arrow is pointing to the left, so you would respond by pressing the 'S' key on your keyboard with your left hand.


        Press the 'S' key to continue
    ImageComponent instructInconLeft_centerImg
      image = img/leftArrow.png
      pos = (0, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg1
      image = img/rightArrow.png
      pos = (.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg1
      image = img/rightArrow.png
      pos = (-.03, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_rightImg2
      image = img/rightArrow.png
      pos = (.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent instructInconLeft_leftImg2
      image = img/rightArrow.png
      pos = (-.06, -.3)
      saveStartStop = False
      size = (.02, .02)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instructInconLeft_keyResp
      allowedKeys [set every repeat] = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False #hide mouse cursor
      End Experiment:
        win.mouseVisible = True #make the mouse cursor visable again
  Routine instructMainTask_2
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine surpriseTask
    ImageComponent stimulus
      image [set every repeat] = $surpriseFaces
      pos = (0, 0.2)
      size = (0.71116667, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructsurpA1_right
      letterHeight = 0.025
      pos [set every repeat] = (0.6, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA1
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    TextComponent instructsurpA2_left
      letterHeight = 0.025
      pos = (-0.6, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA2
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    CodeComponent stimulus_trig_code
      Code Type = Auto->JS
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      Begin Routine:
        #set stimTriggerSent to false at the start of the trial. this way
        #when the stimulus is shown, we can change it to True. This variable
        #is used to ensure we only throw the stimulus EEG trigger once.
        stimulusTriggerSent = False
      Each Frame:
        if stimulus.status == STARTED and not stimulusTriggerSent:
            stimulusTriggerSent = True #switch stimTriggerSent to True so that the stimulus eeg trigger will not be sent again this trial
            port.write([0x1F]) #hexcode = 31; eeg trigger sent
            time.sleep(PulseWidth) #how long to wait before clearing trigger port
            port.write([0x00]) #clear trigger port by sending hexcode = 0
    KeyboardComponent surprise_key_resp
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent response_trigger_code
      Code Type = Auto->JS
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      Begin Routine:
        #clear out the keys_counbted variable at the start of the trial
        #this variable will hold the keys that have had eeg triggers thrown
        #already within a given trial.
        keys_counted = []
      Each Frame:
        if surprise_key_resp.keys and len(surprise_key_resp.keys) > len(keys_counted):# A key response has been made but we haven't yet "counted" it
            keys_counted.append(surprise_key_resp.keys[-1]) #add this response to list of keys pressed this trial
            if len(surprise_key_resp.keys) < 2: #if this is  the first response
                if surprise_key_resp.keys[-1] == '1':
                    port.write([0x29]) # 41
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif surprise_key_resp.keys[-1] == '8':
                    port.write([0x2A])# 42
                    time.sleep(PulseWidth)
                    port.write([0x00])
            elif len(surprise_key_resp.keys) >= 2: #if this is NOT the first response
                if surprise_key_resp.keys[-1] == '1':
                    port.write([0x33]) # 51
                    time.sleep(PulseWidth)
                    port.write([0x00])
                elif surprise_key_resp.keys[-1] == '8':
                    port.write([0x34])# 52
                    time.sleep(PulseWidth)
                    port.write([0x00])
      End Routine:
        #instead of including here, should instead include something
        #in each frame section that computes t at stim onset and then
        #when thisISI - t <= .05 (50 ms) and then at that point we throw
        #the no-resp marker...

        #if not prac_stim_keyResp.keys or len(prac_stim_keyResp.keys) == 0:
        #            port.write([0x63]) # 99
        #            time.sleep(PulseWidth)
        #            port.write([0x00])
  Routine surpriseInstruct_2
  Routine surpriseInstruct
    TextComponent instruct_surprise1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin a task in which you will be shown images of faces and asked if you have seen them before or not.

        For each face displayed, you must indicate whether you saw it in the previous game (OLD face) or if you did not see it in the previous game (NEW face).

        So, if you think that you have seen the face displayed in the previous game, select "Old" as your response or if you think you have not seen the face in the previous game, select "New" as your response.

        Press the 'K' key to continue
    KeyboardComponent instruct_surp1_key_resp
      allowedKeys = 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructSurpriseTask2_2
    TextComponent instructMainTask_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 1.3
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    KeyboardComponent instructMainTask_keyResp
      allowedKeys [set every repeat] = 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation1
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
  Routine error_commitTask
    ImageComponent stimulus_3
      image [set every repeat] = $surpriseFaces
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instructsurpA1_right_3
      letterHeight = 0.025
      pos [set every repeat] = (0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA1
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    TextComponent instructsurpA2_left_3
      letterHeight = 0.025
      pos = (-0.4, -0.03)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructsurpA2
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    KeyboardComponent friendly_key_resp_2
      allowedKeys = '1','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorInstruct
    TextComponent instructMainTask_text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskTextSource
      wrapWidth = 1.3
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    KeyboardComponent instructMainTask_keyResp_3
      allowedKeys [set every repeat] = '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorComm_Instruct
    TextComponent instruct_surprise1_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin a game in which you will be asked if you made an error/errors around the displayed face on the screen during the arrow game.


        For example, if you think that you have made an error/errors around (before/during/after) the displayed face during the arrow game, you should select "I made an error around this face" as your response.

        Press right key to proceed.
    KeyboardComponent instruct_surp1_key_resp_3
      allowedKeys = '8'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine botherRate
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent botherRate_text
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        How much did it bother you when you made an error during the arrow game?

        Your answer should be on a scale from 0 (not at all) to 10 (very much).


        Please enter your answer using the keyboard.
        After entering your answer, press the 'Space' key to continue
    TextboxComponent bother_text_box
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent botherRate_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorPercentage
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent errorNumbers_text_3
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        Excluding the practice, what percentage of your responses do you think were errors during the arrow game?

        Please provide a number as your best estimate.

        Please enter your answer using the keyboard.
        After entering your answer, press the 'Space' key to continue
    TextboxComponent errorPercent_text_box
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent errorN_key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine errorNumbers
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents()
    TextComponent errorNumbers_text_2
      letterHeight = 0.03
      pos = (0, 0.12)
      startVal [time (s)] = 0.0
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      text:
        Excluding the practice, How many errors do you think you made in this game?

        Please provide a number as your best estimate.


        Please enter your answer using the keyboard.
        After entering your answer, press the 'Space' key to continue
    TextboxComponent errorNum_text_box
      anchor = bottom-center
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent errorN_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zoomSetup1
    TextComponent headerZoom1
      color = black
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = First…
      wrapWidth = 1.1
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    TextComponent zoomSetupText1
      color = black
      letterHeight = 0.03
      pos = (-0.3, -0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 0.6
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      text:
        You will record yourself and your screen during these tasks and games.

        Press the ESC key once to exit full-screen mode.

        Log into Zoom using your FIU student credentials.

        Start a meeting
        (you’re the only person there).

        Join with Computer Audio.

        You do not need to turn on your camera.
    ImageComponent joinAudio
      image = resources/zoom/join-audio.jpg
      pos = (0.3, -0.05)
      size = (0.4, 0.24)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instructContinue10
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key when you are in your Zoom room.
    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zoomSetup2
    TextComponent zoomSetupText2
      color = black
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        Share your screen by clicking “Share Screen” on the meeting controls.

        For your privacy, only share this internet browser.

        You should now see this screen, plus the floating meeting controls.
    ImageComponent meetingControls
      image = resources/zoom/meeting-controls.jpg
      pos = (0, 0.2)
      size = (1, 0.029)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instructContinue11
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key when you are sharing your screen with Zoom.
    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zoomSetup3
    TextComponent zoomSetupText3
      color = black
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        Check that Zoom is picking up sound from your microphone.

        When you talk, the microphone icon on the left-hand side of the meeting controls should light up in green.
    ImageComponent microphoneImage
      image = resources/zoom/microphone.jpg
      pos = (0, 0.2)
      size = (0.15, 0.09)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instructContinue12
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key when you have confirmed that your microphone is working.
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zoomSetup4
    TextComponent zoomSetupText4
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0.05)
      startVal [time (s)] = 0.0
      wrapWidth = 0.6
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      text:
        Start recording the Zoom meeting.

        Click on More (⋅⋅⋅) at the far right of the meeting controls.

        Select “Record on this Computer.”
    ImageComponent recordToComp
      image = resources/zoom/record-to-comp.jpg
      pos = (0.3, 0.05)
      size = (0.4, 0.62)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instructContinue13
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key when you see the flashing red dot in the green “screen-sharing” bar.
    ImageComponent greenConfirmBar
      image = resources/zoom/green-confirm-bar.jpg
      pos = (-0.3, -0.15)
      size = (0.3, 0.032)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zoomSetup5
    TextComponent zoomSetupText5
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 0.6
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      text:
        If you are seeing your own video, click on More (⋅⋅⋅) at the far right of the meeting controls. Select “Hide Video Panel.”

        Also, hide the meeting controls so they don’t block part of your screen.

        Click again on More (⋅⋅⋅) at the far right of the meeting controls.

        Select “Hide Floating Meeting Controls.”
    ImageComponent hideControls
      image = resources/zoom/hide-controls.jpg
      pos = (0.3, 0.05)
      size = (0.4, 0.594)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent instructContinue14
      color = black
      letterHeight = 0.02
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        - — -

        Press the space key when you only see this screen but you know Zoom is recording your voice and your screen.
        You will now re-enter full-screen mode.
    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine JS_code
  Routine setup
  Routine zoomSetup1
  Routine zoomSetup2
  Routine zoomSetup3
  Routine zoomSetup4
  Routine zoomSetup5
  Routine welcome
  Routine instructRight
  Routine instructLeft
  Routine instructInconRight
  Routine instructInconLeft
  LoopInitiator prac_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect_practice.csv
    loopType = random
    nReps = 999
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    Routine prac_blockReminders
    Routine initFixation
    LoopInitiator prac_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine prac_stimRoutine
    LoopTerminator prac_trial_loop
    Routine prac_blockFeed
  LoopTerminator prac_block_loop
  LoopInitiator task_block_loop loopType="TrialHandler"
    conditionsFile = blockSelect.csv
    loopType = random
    nReps = 1
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    Routine task_blockReminders
    Routine initFixation
    LoopInitiator task_trial_loop loopType="TrialHandler"
      conditionsFile = $whichBlock
      loopType = random
      nReps = 1
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      Routine task_stimRoutine
    LoopTerminator task_trial_loop
    Routine task_blockFeed
  LoopTerminator task_block_loop
  Routine fixation1
  Routine errorNumbers
  Routine errorPercentage
  Routine botherRate
  Routine surpriseInstruct
  LoopInitiator surprise_block_loop loopType="TrialHandler"
    conditionsFile = surpriseBlock_select_A.xlsx
    loopType = sequential
    nReps = 1
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    Routine instructSurpriseTask2_2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $whichSurpriseBlock
      loopType = random
      nReps = 1
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      Routine surpriseTask
    LoopTerminator trials
  LoopTerminator surprise_block_loop
  Routine finishMessage
